PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'use_eyetracking': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = black
  expName = EyeTrackingStudy
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Routines
  Routine Code_intial
    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        import matplotlib
        matplotlib.use('TKAgg')
        import matplotlib.pyplot as plt

        use_eyetracker = False
      Begin Experiment:
        import pandas as pd
        import random
        from datetime import datetime

        global df
        global df3

        df=pd.read_csv("./snippets/Final/Combi.csv",sep=';')
        df3=pd.read_csv("./snippets/Final/Answers.csv",sep=";",error_bad_lines=False)
        df4=pd.read_csv("./snippets/Final/Demo.csv")

        use_eyetracker = expInfo["use_eyetracking"]

        list1 = df['Combination1']
        list2 = df['Combination2']
        list3 = df['Combination3']

        all_list = [list1,list2,list3]


        global df_timing
        global df_answers

        df_timing = pd.DataFrame(columns=["ImagePath", "StartTime", "EndTime","ImageTime"])
        df_answers = pd.DataFrame(columns=["Index", "Answer","StartTimeAnswer","EndTimeAnswer","AnswerTime"])



        Current_index = None
        Current_index2 = None

        index = [0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15]

        index2 =[0,1,2]
  Routine Welcome_Screen
    TextComponent Introduction
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Welcome to an eye tracking study to investigate the effect of curly brackets in program comprehension.


        Please press <spacebar> to continue
    KeyboardComponent EndTaskKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent instructions
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this study. It will take about 30 minutes to complete.

        You will see various source-code snippets in Java in two steps.

        First, you see the computational part of the snippet. Your task is to comprehend this part as correct and as fast as possible.

        Second, you see the main method with a call to the computational part. You are then asked to determine the output of the snippet by selecting the correct output from several options.

        We start with a tutorial task so you can get familiar with the study.



        Please press <spacebar> to continue.
    KeyboardComponent KyeNext
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Study_Structure
    TextComponent introduction2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Over the following pages you will be shown various snippets of source code in Python. This aims at testing your comprehension of the given algorithms and data structures. You will be asked to compute each output.


        Press <spacebar> to continue.
    KeyboardComponent SpaceBar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start_Task
    TextComponent text_start
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        In this study you will see 8 snippets. The snippets will be shown in two parts, First part is going to be computational part of the snippet and in second you are going to see the main function.

        Firstly , you are going to see a demo programs with instructions. Please follow the instructions through further study.

        Please Press <spacebar> to continue.
    KeyboardComponent srart_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EEG_Setup
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        global start_of_eyetracking
        start_of_eyetracking = datetime.now()
        start_of_eyetracking = datetime.timestamp(start_of_eyetracking)

        logger = None

        if use_eyetracker==True:
            from EyetrackerUtils.base_functionalities.logger import Logger
            logger = Logger(".\\data\\eye_tracking_data_" + expInfo['session'] + " _ " + expInfo['participant'] + ".csv")
            logger.add_key_to_log('left_gaze_point_validity')
            logger.add_key_to_log('right_gaze_point_validity')
            logger.add_key_to_log('left_gaze_point_on_display_area')
            logger.add_key_to_log('right_gaze_point_on_display_area')
            logger.add_key_to_log('system_time_stamp')
            logger.add_key_to_log('left_pupil_diameter')
            logger.add_key_to_log('right_pupil_diameter')



        if use_eyetracker==True:
            logger.start_recording()
  Routine Update_Index
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if len(index)>0:
            Current_index = index.pop(0)
        else:
            break
  Routine Task
    KeyboardComponent key_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        #print(all_list[Current_index2][Current_index])
        start_of_eyetracking
        current_time_start = datetime.now()
        current_time_start = datetime.timestamp(current_time_start) - start_of_eyetracking

        image_path = all_list[Current_index2][Current_index]

        print("Start Time Stamp: ")
        print(current_time_start)
      End Routine:
        start_of_eyetracking
        current_time_end = datetime.now()
        current_time_end = datetime.timestamp(current_time_end) - start_of_eyetracking

        image_time = current_time_end-current_time_start
        df_timing.loc[len(df_timing)] = [image_path, current_time_start, current_time_end,image_time]
        print("End Time Stamp: ")
        print(current_time_end)
    ImageComponent image
      image [set every repeat] = $all_list[Current_index2][Current_index]
      interpolate = nearest
      pos = (0,0 )
      size [set every repeat] = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_2
      letterHeight = 0.1
      pos = (0,-1)
      startVal [time (s)] = 0.0
      text = Press < spacebar > to continue 
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  Routine resposne
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        print (b[Current_index])
    ImageComponent image_2
      image [set every repeat] = $b[Current_index]
      startVal [time (s)] = 0.0
      units = norm
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  Routine User_response
    TextComponent User_responses
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent keyResp
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','return','backspace','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        respDisplay = ""
        maxResp= 10
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = Type your answers here ....
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  Routine User_response_2
    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text = type response
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  Routine user
    MouseComponent mouse
      clickable = A,B
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Py
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      Begin Routine:
        start_of_eyetracking
        current_time_start = datetime.now()
        current_time_start = datetime.timestamp(current_time_start)- start_of_eyetracking
        print("Start Time Stamp: ")
        print(current_time_start)

        answer_time= current_time_end-current_time_start
      Each Frame:
        start_of_eyetracking
        current_time_end = datetime.now()
        current_time_end = datetime.timestamp(current_time_end)- start_of_eyetracking
        answer_time= current_time_end-current_time_start
      End Routine:
        start_of_eyetracking
        current_time_end = datetime.now()
        current_time_end = datetime.timestamp(current_time_end)- start_of_eyetracking

        answer_time= current_time_end-current_time_start

        #if mouse.clicked_name== 'A':
            #df_answers.loc[len(df_answers)] = [Current_index,answer_path1, current_time_start,current_time_end]
        #elif mouse.clicked_name== 'B':
            #df_answers.loc[len(df_answers)] = [Current_index,answer_path2, current_time_start,current_time_end]

        print("End Time Stamp: ")

        print(current_time_end)
    ButtonComponent A
      bold = True
      borderColor = darkblue
      callback = df_answers.loc[len(df_answers)] = [Current_index,df3.iloc[Current_index]["Value1"],current_time_start,current_time_end,answer_time]
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $df3.iloc[Current_index]["Value1"]
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    ButtonComponent B
      bold = True
      borderColor = darkblue
      callback = df_answers.loc[len(df_answers)] = [Current_index,df3.iloc[Current_index]["Value2"],current_time_start,current_time_end,answer_time]
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $df3.iloc[Current_index]["Value2"]
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    TextComponent text_3
      letterHeight = 0.05
      pos = (-0.07, 0.33)
      startVal [time (s)] = 0.0
      text = Choose your Output
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  Routine EEG
    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        if use_eyetracker:
            logger.stop_recording()

        df_timing.to_csv(".\data\study_cutting_data_" + expInfo['session'].strip() + " _ " + expInfo['participant'].strip() + ".csv",sep=",")
        df_answers.to_csv(".\data\study_answers_" + expInfo['session'].strip() + " _ " + expInfo['participant'].strip() + ".csv",sep=",")
  Routine End
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation.


        Press <spacebar> to exit
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine select2
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        from random import shuffle

        #test=random.choice(All_list)

        temp= list(zip(All_list,All_list1))
        random.shuffle(temp)
        res1,res2= zip(*temp)
        final_list=list(res1)
        final_list2=list(res2)

        a = [*final_list[0], *final_list[1],*final_list[2]]
        b = [*final_list2[0], *final_list2[1],*final_list2[2]]
  Routine update_index2
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        Current_index = index.pop(9)
  Routine index_update1
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        Current_index2 = index2.pop(0)
  Routine Index_update2
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        Current_index2 = index2.pop(0)
  Routine Index_update3
    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        Current_index2 = index2.pop(0)
        #Current_index2 = index2.pop(0)
        #Current_index2 = index2.pop(0)


        # if 1 active - Combination 1

        # if 2 active - Combination 2

        # if all active - Combination 3
  Routine ResponseTime
    CodeComponent code_14
      Code Type = Py
      End Routine:
        df_resp.loc(len[df_resp]) = [df_timing[imagetime]+df_answer[Answertime]]
  Routine Start
    TextComponent text_4
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Now everything looks perfect. Lets begin the study.

        Please press <spacebar> to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo1
    ImageComponent image_3
      image = ./snippets/Final/Demo.png
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo2
    ImageComponent image_4
      image = ./snippets/Final/Demoresp.png
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Demo_Output
    ButtonComponent C
      bold = True
      borderColor = darkblue
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0
      text = Hellow,World
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    ButtonComponent D
      bold = True
      borderColor = darkblue
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0
      text = World, Hellow
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    MouseComponent mouse_2
      clickable = C,D
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (-0.07, 0.33)
      startVal [time (s)] = 0.0
      text = Choose your output
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Flow
  Routine Code_intial
  Routine Welcome_Screen
  Routine Instructions
  Routine demo1
  Routine demo2
  Routine Demo_Output
  Routine Start
  Routine EEG_Setup
  Routine Index_update3
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 16
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    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine Update_Index
      Routine Task
    LoopTerminator trials_2
    Routine user
  LoopTerminator trials
  Routine EEG
  Routine End
